<PlusConfiguration version="2.1" PlusRevision="Plus-2.1.2.3381 - Win32">
  <DataCollection StartupDelaySec="1">
    <DeviceSet Name="Two EM Sensors One Recorder, calibrated to 2024 final scan/head -Mike" Description="Connect sensor with stylus to sensor bay 1 (port 0) and the sensor attached to the head to sensor bay 2 (port 1). Tracking two EM sensors. This config also sets up one virtual capture device for recording tracking to a file (This file records the tracking for both sensors). Broadcasting tool tracking data through OpenIGTLink." />
    <Device
      Id="EmTracker"
      Type="Ascension3DG"
      AcquisitionRate="50"
      LocalTimeOffsetSec="0"
      FilterAcWideNotch="1"
      ToolReferenceFrame="EmTracker"
      FilterAcNarrowNotch="0"
      FilterDcAdaptive="0"
      FilterLargeChange="0"
      FilterAlpha="0">
      <DataSources>
        <DataSource Type="Tool" Id="StylusSensor" PortName="0" BufferSize="500" AveragedItemsForFiltering="20" />
		<DataSource Type="Tool" Id="HeadSensor" PortName="1" BufferSize="500" AveragedItemsForFiltering="20" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="EmTrackerStream">
          <DataSource Id="StylusSensor" />
		  <DataSource Id="HeadSensor" />
        </OutputChannel>
      </OutputChannels>
    </Device>
	<Device Id="CaptureDevice" Type="VirtualCapture" BaseFileName="RecordingsTestMike.igs.mha" EnableCapturingOnStart="FALSE" > 
		<InputChannels>
			<InputChannel Id="EmTrackerStream" />
		</InputChannels>
	</Device>
  </DataCollection>
  <PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1" MaxTimeSpentWithProcessingMs="50" ListeningPort="18944" SendValidTransformsOnly="true" OutputChannelId="EmTrackerStream">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="StylusSensorToEmTracker" />
		<Transform Name="EmTrackerToHeadSensor" />
		<Transform Name="StylusTipToStylusSensor" />
		<Transform Name="NeedleTipToStylusSensor" />
		<Transform Name="HeadSensorTo2024FinalScan" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  <!--
  The following defines a StylusTipToStylusSensor transformation matrix
  which is fixed and should be a decent calibration for the stylus object
  printed on 3/7/2023. It could be updated by re-running the pivot and
  spin calibration steps in Slicer and copy/pasting the resulting transformation
  into here.  Error reported is an estimate from memory, updated versions should record the actual error. 
  -->
  <CoordinateDefinitions>
	<!--
	Newly scanned for 2024 bootcamp final model. Rigid neck, silicone airway. Applied museum wax
	to better lock down the head sensor, which had shifted.  Also used an interior corner as 
	a fiducial point rather than the lips (which are hard to landmark on the scan).
	-->
	<Transform From="HeadSensor" To="2024FinalScan"
	Matrix="0.0660032 0.997817 -0.00216096 -10.2857 
	0.80048 -0.0542425 -0.5969 -206.216 
	-0.595714 0.0376675 -0.802313 195.482 
	0 0 0 1 "
	Error="0.7061" Date="2024.07.03" />

	<!--   
	The following defines a StylusTipToStylusSensor transformation matrix which is fixed and should be a decent calibration for the stylus object printed on 3/7/2023. It could be updated by re-running the pivot and spin calibration steps in Slicer and copy/pasting the resulting transformation into here.  Error reported is an estimate from memory, updated versions should record the actual error. 
	-->
	<!--
	Previous version of transform matrix:
     <Transform From="StylusTip" To="StylusSensor"
      Matrix="0.0113631 -0.0342283 0.999349 71.5634 
	  0.999935 5.42101e-20 -0.0113697 -0.814186 
	  0.000389166 0.999414 0.0342261 2.45093 
	  0 0 0 1 "
       Error="0.9" Date="2023.03.08" />
	-->
	 <Transform From="StylusTip" To="StylusSensor"
	  Matrix="-0.0352898 -0.00115823 0.999376 70.5608 
      -0.999377 0 -0.0352898 0.0434718 
      4.08738e-05 -0.999999 -0.00115751 -0.302784 
      0 0 0 1 "
	  Error="0.39" Date="2023.05.31" />

	<!--
	The EM sensor coordinate systems have the y axis as the one sticking out
	the end of the wire, but the needle models have the z axis as the one 
	that the shaft of the needle runs along.  For convenience, we should
	reorient the sensor to the model. We can do this by cycling the axes:
    x to y, y to z, and z to x. This appears to put the sensor location at 
	at the center of the ball at the tip of the needle.  A z translation of 
	-1.0 to 1.5 mm may do a better job of putting it at the tip of the ball 
	if desired.  
	-->
	<Transform From="NeedleTip" To="StylusSensor"
	 Matrix="0 0 1 0
	 1 0 0 0
	 0 1 0 0
	 0 0 0 1 "
	 Error="0" Date="2023.05.02"
	 />
  </CoordinateDefinitions>
</PlusConfiguration>
