<PlusConfiguration version="2.1" PlusRevision="Plus-2.1.2.3381 - Win32">
  <DataCollection StartupDelaySec="1">
    <DeviceSet Name="2025 Aug final" Description="Connect sensor with stylus to sensor bay 1 (port 0) and the sensor attached to the head to sensor bay 2 (port 1). Tracking two EM sensors. This config also sets up one virtual capture device for recording tracking to a file (This file records the tracking for both sensors). Broadcasting tool tracking data through OpenIGTLink." />
    <Device
      Id="EmTracker"
      Type="Ascension3DG"
      AcquisitionRate="50"
      LocalTimeOffsetSec="0"
      FilterAcWideNotch="1"
      ToolReferenceFrame="EmTracker"
      FilterAcNarrowNotch="0"
      FilterDcAdaptive="0"
      FilterLargeChange="0"
      FilterAlpha="0">
      <DataSources>
        <DataSource Type="Tool" Id="StylusSensor" PortName="0" BufferSize="500" AveragedItemsForFiltering="20" />
		<DataSource Type="Tool" Id="HeadSensor" PortName="1" BufferSize="500" AveragedItemsForFiltering="20" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="EmTrackerStream">
          <DataSource Id="StylusSensor" />
		  <DataSource Id="HeadSensor" />
        </OutputChannel>
      </OutputChannels>
    </Device>
	<Device Id="CaptureDevice" Type="VirtualCapture" BaseFileName="RecordingsTestMike.igs.mha" EnableCapturingOnStart="FALSE" > 
		<InputChannels>
			<InputChannel Id="EmTrackerStream" />
		</InputChannels>
	</Device>
  </DataCollection>
  <PlusOpenIGTLinkServer MaxNumberOfIgtlMessagesToSend="1" MaxTimeSpentWithProcessingMs="50" ListeningPort="18941" SendValidTransformsOnly="true" OutputChannelId="EmTrackerStream">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="StylusSensorToEmTracker" />
		<Transform Name="EmTrackerToHeadSensor" />
		<Transform Name="StylusTipToStylusSensor" />
		<Transform Name="NeedleTipToStylusSensor" />
		<Transform Name="HeadSensorToFlat25Chest" />
		<Transform Name="HeadSensorToCase25Side" />
		<Transform Name="CaseToFlat"/>
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  <!--
  The following defines a StylusTipToStylusSensor transformation matrix
  which is fixed and should be a decent calibration for the stylus object
  printed on 3/7/2023. It could be updated by re-running the pivot and
  spin calibration steps in Slicer and copy/pasting the resulting transformation
  into here.  Error reported is an estimate from memory, updated versions should record the actual error. 
  -->
  <CoordinateDefinitions>
	<!--
	This is the unified transform from the flat clip sensor to the head STL including
	the adjustment based on July 2025 bootcamp trajectories for the Chest panel head.
	It may be that there is a 2 deg change in the slot angle or in how the flat sensor 
	sits on the two heads.  For July 2025 bootcamp I used the same matrix for both
	heads, but the chest trajectories seemed off by a rigid error, so this is trying 
	to fix that.  It should not now be applied to the SidePanelHead, so it should 
	maybe be renamed. Since it's not directly from a calibration, the error number
	is made up (just transferred from prior). 
	-->
	<Transform From="HeadSensor" To="Flat25Chest"
	Matrix="0.0596658 0.997837 0.0275839 3.72424 
	0.836294 -0.0348804 -0.547171 68.9185 
	-0.545026 0.0557157 -0.836566 -704.791 
	0 0 0 1 "
	Error="0.5" Date="2025.08.08"/>
	<!--
	Newly scanned for 2025 bootcamp models. The plastic lines up perfectly, so this 
	should work for both the chest panel and side panel models. Used only the 6 
	registration points, but tried to keep the stylus in approx the same orientation
	relative to point, and tried to hit the middle of the donut. This used the 
	flatter clip sensor clipped to the head.
	-->
	<!-- NO LONGER USED!!<Transform From="HeadSensor" To="Flat25ChestAndSide"
	Matrix="0.0227468 0.997885 0.0608939 6.42057 
	0.838455 0.014132 -0.544788 68.3707 
	-0.544496 0.063449 -0.83636 -709.296 
	0 0 0 1 "
	Error="0.5404" Date="2025.07.07" />-->
	<!--
	Case clip to plastic transform.  There's unfortunately currently no good way to 
	do as accurate a calibration for this version, because the Case clip sensor is
	the same one used for the stylus point gathering, and you can't use it in two
	places at once.  The below calibration comes from using the scope tip to perform
	a calibration. 
	-->
	<Transform From="HeadSensor" To="Case25Side"
	Matrix="0.0107086 -0.0545836 0.998452 3.97359 
	0.81904 0.573292 0.0225565 83.2454 
	-0.573636 0.817531 0.0508453 -695.018 
	0 0 0 1 "
	Error="4.0" Date="2025.07.08" />
	<!--
	Newly scanned for 2024 bootcamp final model. Rigid neck, silicone airway. Applied museum wax
	to better lock down the head sensor, which had shifted.  Also used an interior corner as 
	a fiducial point rather than the lips (which are hard to landmark on the scan).
	-->
	<Transform From="HeadSensor" To="2024FinalScan"
	Matrix="0.0660032 0.997817 -0.00216096 -10.2857 
	0.80048 -0.0542425 -0.5969 -206.216 
	-0.595714 0.0376675 -0.802313 195.482 
	0 0 0 1 "
	Error="0.7061" Date="2024.07.03" />

	<!--   
	The following defines a StylusTipToStylusSensor transformation matrix which is fixed and should be a decent calibration for the stylus object printed on 3/7/2023. It could be updated by re-running the pivot and spin calibration steps in Slicer and copy/pasting the resulting transformation into here.  Error reported is an estimate from memory, updated versions should record the actual error. 
	-->
	<!--
	Previous version of transform matrix:
     <Transform From="StylusTip" To="StylusSensor"
      Matrix="0.0113631 -0.0342283 0.999349 71.5634 
	  0.999935 5.42101e-20 -0.0113697 -0.814186 
	  0.000389166 0.999414 0.0342261 2.45093 
	  0 0 0 1 "
       Error="0.9" Date="2023.03.08" />
	-->
	 <Transform From="StylusTip" To="StylusSensor"
	  Matrix="-0.0352898 -0.00115823 0.999376 70.5608 
      -0.999377 0 -0.0352898 0.0434718 
      4.08738e-05 -0.999999 -0.00115751 -0.302784 
      0 0 0 1 "
	  Error="0.39" Date="2023.05.31" />

	<!--
	The EM sensor coordinate systems have the y axis as the one sticking out
	the end of the wire, but the needle models have the z axis as the one 
	that the shaft of the needle runs along.  For convenience, we should
	reorient the sensor to the model. We can do this by cycling the axes:
    x to y, y to z, and z to x. This appears to put the sensor location at 
	at the center of the ball at the tip of the needle.  A z translation of 
	-1.0 to 1.5 mm may do a better job of putting it at the tip of the ball 
	if desired.  
	-->
	<Transform From="NeedleTip" To="StylusSensor"
	 Matrix="0 0 1 0
	 1 0 0 0
	 0 1 0 0
	 0 0 0 1 "
	 Error="0" Date="2023.05.02"
	 />
	 <!--
	 The new heads for 2025 will require the use of a sensor which slides
	 into a case to clip to the head, in addition to the older clip.
	 To distinguish them, I call the old one the "Flat" sensor and 
	 the new one the "Case" sensor (because it slides into a case).
	 We need to transform Case sensor coordinates into the equivalent
	 coordinates as if they came from the Flat sensor.  The current
	 HeadSensorTo2025ChestAndSide calibration used the Flat sensor.
	 To be able to use the Case sensor instead we need to optionally
	 compose it with a CaseToFlat transform
	 -->
	 <Transform From="Case" To="Flat"
	 Matrix="0.999732 0.00461934 -0.0226858 9.83342 
	-0.00496228 0.999874 -0.015084 -0.468855 
	0.0226132 0.0151926 0.999629 12.8978 
	0 0 0 1 "
	Error="3.2" Date="2025.07.07"/>
	
  </CoordinateDefinitions>
</PlusConfiguration>
